! written by generate_XDS.INP version 1.02 (11-Jan-2021)
JOB= XYCORR INIT COLSPOT IDXREF DEFPIX INTEGRATE CORRECT
!JOB= DEFPIX INTEGRATE CORRECT
! parameters specifically for this detector and beamline:
MINIMUM_VALID_PIXEL_VALUE= 0
OVERLOAD= 1048575 !#2147483647 # 2**31 - 1 one of the worst primes there is and also masking negative values for wrongly converted negative uint32_t
SENSOR_THICKNESS= 0.32
NX=2463 NY=2527 QX= 0.172 QY= 0.172 ! to make CORRECT happy if frames are unavailable

!ORGX= 1250.7209 ! Detector origin x coordinate
!ORGY= 1151.3820 ! Detector origin y coordinate 

!DETECTOR_DISTANCE= 220.9945 !read by XYCORR, IDXREF. Negative if detector normal points to crystal.                

ORGX=$ORGX ORGY=$ORGY ! Detector origin (pixels)

DETECTOR_DISTANCE= 221.4 !$DETECTOR_DISTANCE !220.9945 !$DETECTOR_DISTANCE !read by XYCORR, IDXREF. Negative if detector normal points to crystal.               


OSCILLATION_RANGE=$OSCILLATION_RANGE
STARTING_ANGLE= $STARTING_ANGLE                 
X-RAY_WAVELENGTH= $WAVELENGTH
NAME_TEMPLATE_OF_DATA_FRAMES=$NAME_TEMPLATE_OF_DATA_FRAMES 
! REFERENCE_DATA_SET=xxx/XDS_ASCII.HKL ! e.g. to ensure consistent indexing  
DATA_RANGE=1 $NFRAMES
SPOT_RANGE=1 $NFRAMES


!DETECTOR_DISTANCE= 219 !read by XYCORR, IDXREF. Negative if detector normal points to crystal.               

!OSCILLATION_RANGE=0.2
!STARTING_ANGLE= 0.0                 
!X-RAY_WAVELENGTH= 0.775
!NAME_TEMPLATE_OF_DATA_FRAMES=/asap3/petra3/gpfs/p09/2023/data/11016750/raw/calibration/dist05/rotational_001/dist05_001_?????.cbf 
! REFERENCE_DATA_SET=xxx/XDS_ASCII.HKL ! e.g. to ensure consistent indexing  
!DATA_RANGE=1 1800
!SPOT_RANGE=1 1800
! BACKGROUND_RANGE=1 10 ! rather use defaults (first 5 degree of rotation)   

MAXIMUM_NUMBER_OF_PROCESSORS=32
MAXIMUM_NUMBER_OF_JOBS=8

SPACE_GROUP_NUMBER=0 !96 - lyso                   ! 0 if unknown
!UNIT_CELL_CONSTANTS= 79 79 38 90 90 90 ! put correct values if known
INCLUDE_RESOLUTION_RANGE=50 0  ! after CORRECT, insert high resol limit; re-run CORRECT
! IDXREF now obeys INCLUDE_RESOLUTION_RANGE and EXCLUDE_RESOLUTION_RANGE to exclude ice-rings

FRIEDEL'S_LAW=TRUE     ! This acts only on the CORRECT step
! If the anom signal turns out to be, or is known to be, very low or absent,
! use FRIEDEL'S_LAW=TRUE instead (or comment out the line); re-run CORRECT

! remove the "!" in the following line:
! STRICT_ABSORPTION_CORRECTION=TRUE
! if the anomalous signal is strong: in that case, in CORRECT.LP the three
! "CHI^2-VALUE OF FIT OF CORRECTION FACTORS" values are significantly> 1, e.g. 1.5
!
! exclude (mask) untrusted areas of detector, e.g. beamstop shadow :
! UNTRUSTED_RECTANGLE= 1800 1950 2100 2150 ! x-min x-max y-min y-max ! repeat
! UNTRUSTED_ELLIPSE= 2034 2070 1850 2240 ! x-min x-max y-min y-max ! if needed
! UNTRUSTED_QUADRILATERAL= x1 y1 x2 y2 x3 y3 x4 y4 ! see documentation
!
! parameters with changes wrt default values:

DETECTOR= PILATUS
TRUSTED_REGION=0.0 1.2 ! partially use corners of detector (0 1.4143: use all pixels)
VALUE_RANGE_FOR_TRUSTED_DETECTOR_PIXELS=6000. 30000. ! often 7000 or 8000 is ok
!VALUE_RANGE_FOR_TRUSTED_DETECTOR_PIXELS=6000. 30000. ! often 7000 or 8000 is ok
STRONG_PIXEL=4           ! COLSPOT: only use strong reflections (default is 3)
!BACKGROUND_PIXEL=2
MINIMUM_NUMBER_OF_PIXELS_IN_A_SPOT=3 ! default of 6 is sometimes too high
!SPOT_MAXIMUM-CENTROID=    8.00
! close spots/long cell axis: reduce SEPMIN and CLUSTER_RADIUS from their defaults of 7 and 3.5
SEPMIN=4  CLUSTER_RADIUS=2 ! 4 and 2 for Pixel Array Detectors
! since XDS 01-MAR-2015, POSITION supersedes DISTANCE.
! nowadays headers are usually correct so refine POSITION in INTEGRATE but not IDXREF if low to medium resolution
! however, if the spots from COLSPOT extend to 2A then POSITION could, and if 1.5A POSITION should be refined
REFINE(IDXREF)=CELL BEAM ORIENTATION AXIS POSITION ! add POSITION if high resolution, or DETECTOR_DISTANCE inaccurate
REFINE(INTEGRATE)= POSITION BEAM ORIENTATION ! AXIS CELL . If 1.5A or higher it is ok to refine CELL
! REFINE(CORRECT)=CELL BEAM ORIENTATION AXIS POSITION ! Default is: refine everything

! LIB= /opt/xray/XDSAPP/plugins/durin-plugin.so
ROTATION_AXIS= -1 0 0  ! only read by IDXREF
DIRECTION_OF_DETECTOR_X-AXIS=1 0 0
DIRECTION_OF_DETECTOR_Y-AXIS=0 1 0
INCIDENT_BEAM_DIRECTION=0 0 1          ! only read by IDXREF
FRACTION_OF_POLARIZATION=0.98   ! better value is provided by beamline staff!
POLARIZATION_PLANE_NORMAL=0 1 0        ! only used by CORRECT
!used by DEFPIX and CORRECT to exclude ice-reflections / ice rings - uncomment if necessary
!fine-grained list is in Thorn et al http://journals.iucr.org/d/issues/2017/09/00/hi5647/index.html
!EXCLUDE_RESOLUTION_RANGE= 3.93 3.87 !ice-ring at 3.897 Angstrom
!EXCLUDE_RESOLUTION_RANGE= 3.70 3.64 !ice-ring at 3.669 Angstrom
!EXCLUDE_RESOLUTION_RANGE= 3.47 3.41 !ice-ring at 3.441 Angstrom
!EXCLUDE_RESOLUTION_RANGE= 2.70 2.64 !ice-ring at 2.671 Angstrom
!EXCLUDE_RESOLUTION_RANGE= 2.28 2.22 !ice-ring at 2.249 Angstrom
!EXCLUDE_RESOLUTION_RANGE= 2.102 2.042 !ice-ring at 2.072 Angstrom - strong
!EXCLUDE_RESOLUTION_RANGE= 1.978 1.918 !ice-ring at 1.948 Angstrom - weak
!EXCLUDE_RESOLUTION_RANGE= 1.948 1.888 !ice-ring at 1.918 Angstrom - strong
!EXCLUDE_RESOLUTION_RANGE= 1.913 1.853 !ice-ring at 1.883 Angstrom - weak
!EXCLUDE_RESOLUTION_RANGE= 1.751 1.691 !ice-ring at 1.721 Angstrom - weak
! additional ice-ring resolution ranges: 1.524 1.519, 1.473 1.470, 1.444 1.440, 1.372 1.368, 1.367 1.363,
! 1.299 1.296, 1.275 1.274, 1.261 1.259, 1.224 1.222, 1.171 1.168, 1.124 1.122 (compiled by GlobalPhasing)

NUMBER_OF_PROFILE_GRID_POINTS_ALONG_ALPHA/BETA=13 ! Default is 9 - Increasing may improve data 
NUMBER_OF_PROFILE_GRID_POINTS_ALONG_GAMMA=13      ! accuracy, particularly if finely-sliced on phi, 
!UNTRUSTED_ELLIPSE= 635 735 804 904
!                                                   and does not seem to have any downsides. 
!EXCLUSION OF HORIZONTAL DEAD AREAS OF THE EIGER2 16M DETECTOR
! UNTRUSTED_RECTANGLE= 1028 1041      0 4363
! UNTRUSTED_RECTANGLE= 2068 2081      0 4363
! UNTRUSTED_RECTANGLE= 3108 3121      0 4363
!EXCLUSION OF VERTICAL DEAD AREAS OF THE EIGER2 16M DETECTOR 
!UNTRUSTED_RECTANGLE=    0 100    0  1707
! UNTRUSTED_RECTANGLE=    0 4149   1062 1101
! UNTRUSTED_RECTANGLE=    0 4149   1612 1651
! UNTRUSTED_RECTANGLE=    0 4149   2162 2201
! UNTRUSTED_RECTANGLE=    0 4149   2712 2751
! UNTRUSTED_RECTANGLE=    0 4149   3262 3301
! UNTRUSTED_RECTANGLE=    0 4149   3812 3851
